PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial
    ParallelOutComponent p_port
      address = 0x3FE8
      startData = 10
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = wait
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    ParallelOutComponent p_port_2
      address = 0x3FE8
      startData = 11
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (frames)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text = wait again
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    ParallelOutComponent p_port_3
      address = 0x3FE8
      startData = 12
      startVal [time (s)] = 6
      stopData = 0
      stopVal [duration (frames)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = ciao
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Flow
  Routine trial
