PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    ParallelOutComponent p_port
      address = 0x3FF8
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 2
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_2
      address = 0x3FF8
      startData = 2
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (frames)] = 2
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine trial
